PsychoPy2experiment version="2023.2.0"
Settings
  Audio lib = sounddevice
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2023.2
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = blockedTrials
  keyboardBackend = ioHub
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Routines
  Routine Video
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    MovieComponent movie
      backend = opencv
      forceEndRoutine = False
      movie [set every repeat] = $stimFile
      size = (1.5,0.8)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 10
      volume = 5
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  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our study!

        Press <spacebar> to begin!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine gender_selection
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    SliderComponent Gender
      borderColor = 1.0000, 1.0000, 1.0000
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ("female", "male", "diverse")
      letterHeight = 0.06
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_2
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please select your gender:
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = press 'space' to continue
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  Routine Emotion_level
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    SliderComponent slider_2
      borderColor = 1.0000, 1.0000, 1.0000
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ("not at all", "","","","totally")
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_6
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press 'space' to continue
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  Routine variable
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        msg = "What level of " + feeling + " did you feel with the last video?"
  Routine Age_selection
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    TextComponent text_4
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How old are you?
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = press 'space' to continue
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    TextboxComponent Age
      autoLog = False
      bold = False
      color = 0.3255, 0.3255, 0.3255
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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  Routine variable_globalclock
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        from datetime import datetime
        time_globaltime = datetime.now().strftime('%H:%M:%S.%f');
Flow
  Routine Welcome
  Routine gender_selection
  Routine Age_selection
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = facesBlock.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimFile': 'stims/sad.mp4', 'feeling': 'sad'},
      {'stimFile': 'stims/happy.mp4', 'feeling': 'happy'},
      {'stimFile': 'stims/neutral.mp4', 'feeling': 'neutral'}]
    Routine variable_globalclock
    Routine Video
    Routine variable
    Routine Emotion_level
  LoopTerminator trials
