PsychoPy2experiment version="2023.2.0"
Settings
  Audio lib = sounddevice
  Data filename = u'data/%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to our study!

        In this study, you will watch a series of videos. After each video, you will be prompted to assess and rank the intensity of a specific emotion that the video provoked in you.

        Please avoid tilting, rotating or covering your face.

        Remember, you have the freedom to choose to stop your participation in the study at any point.


        Press <spacebar> to begin!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine variable_globalclock
    RoutineSettingsComponent variable_globalclock
      saveStartStop = False
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        from datetime import datetime
        time_globaltime = datetime.now().strftime('%H:%M:%S.%f')
    VariableComponent globalclock_2
      saveStartStop = False
      startRoutineValue = $time_globaltime
      stopVal [duration (s)] = 0.1
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  Routine video
    RoutineSettingsComponent video
      saveStartStop = False
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    MovieComponent movie
      backend = opencv
      forceEndRoutine = True
      movie [set every repeat] = $stimFile
      size = (1.5,0.8)
      startVal [time (s)] = 0
      volume = 5
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  Routine variable2
    RoutineSettingsComponent variable2
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        msg = "What level of " + feeling + " did you feel with the last video?"
  Routine emotion_level
    RoutineSettingsComponent emotion_level
      saveStartStop = False
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    SliderComponent slider_2
      borderColor = 1.0000, 1.0000, 1.0000
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ("not at all", "","","","totally")
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.6, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_2
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press 'space' to continue
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  Routine variable_globalclock_end
    RoutineSettingsComponent variable_globalclock_end
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        from datetime import datetime
        time_globaltime = datetime.now().strftime('%H:%M:%S.%f')
    VariableComponent globalclock
      saveStartStop = False
      startRoutineValue = $time_globaltime
      stopVal [duration (s)] = 0.1
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  Routine relaxation
    RoutineSettingsComponent relaxation
      saveStartStop = False
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    TextComponent fix
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine End
    RoutineSettingsComponent End
      saveStartStop = False
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    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you!
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Flow
  Routine welcome
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = videos.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimFile': 'stims/sad1.mp4', 'feeling': 'sadness'},
      {'stimFile': 'stims/sad2.mp4', 'feeling': 'sadness'},
      {'stimFile': 'stims/sad3.mp4', 'feeling': 'sadness'},
      {'stimFile': 'stims/sad4.mp4', 'feeling': 'sadness'},
      {'stimFile': 'stims/happy1.mp4', 'feeling': 'happiness'},
      {'stimFile': 'stims/happy2.mp4', 'feeling': 'happiness'},
      {'stimFile': 'stims/happy3.mp4', 'feeling': 'happiness'},
      {'stimFile': 'stims/happy4.mp4', 'feeling': 'happiness'},
      {'stimFile': 'stims/neutral1.mp4', 'feeling': 'neutrality'},
      {'stimFile': 'stims/neutral2.mp4', 'feeling': 'neutrality'},
      {'stimFile': 'stims/neutral3.mp4', 'feeling': 'neutrality'},
      {'stimFile': 'stims/neutral4.mp4', 'feeling': 'neutrality'},
      {'stimFile': 'stims/fear1.mp4', 'feeling': 'fear'},
      {'stimFile': 'stims/fear2.mp4', 'feeling': 'fear'},
      {'stimFile': 'stims/fear3.mp4', 'feeling': 'fear'},
      {'stimFile': 'stims/fear4.mp4', 'feeling': 'fear'}]
    Routine relaxation
    Routine variable_globalclock
    Routine video
    Routine variable_globalclock_end
    Routine variable2
    Routine emotion_level
  LoopTerminator loop
  Routine End
